/*
Kevin Terretaz - kevinterretaz@gmail.com
no AI for this

unlicense :
This is free and unencumbered software released into the public domain. Anyone is free to copy, modify, publish, use, compile, sell, or
distribute this software, either in source code form or as a compiled binary, for any purpose, commercial or non-commercial, and by any means.
In jurisdictions that recognize copyright laws, the author or authors of this software dedicate any and all copyright interest in the
software to the public domain. We make this dedication for the benefit of the public at large and to the detriment of our heirs and
successors. We intend this dedication to be an overt act of relinquishment in perpetuity of all present and future rights to this software under copyright law.
THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF
MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS BE LIABLE FOR ANY CLAIM, DAMAGES OR
OTHER LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE SOFTWARE.
For more information, please refer to <http://unlicense.org/>
*/

enhance_All_Images_Contrasts();

function enhance_All_Images_Contrasts() {
	if (nImages()==0) exit();
	showStatus("Enhance all contrasts");
	for (i=0; i<nImages ; i++) {			
		selectImage(i+1);
		enhance_All_Channels();
		showProgress(i/nImages);
	}
}


function enhance_All_Channels() {
	if (nImages()==0) exit();
	getDimensions(width, height, channels, slices, frames);
	Stack.getPosition(channel, slice, frame);
	for (i = 1; i <= channels; i++) {
		Stack.setPosition(i, slice, frame);
		run("Enhance Contrast", "saturated=0.1");	
	}
	Stack.setPosition(channel, slice, frame);
	updateDisplay();
	call("ij.plugin.frame.ContrastAdjuster.update");
}
